PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = trainning
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    ImageComponent image
      image = material/welcome.jpg
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pipeline
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    TextboxComponent textbox
      bold = False
      borderWidth = 2.5
      editable = False
      font = Microsoft YaHei
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $type
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rating
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = 可以通过“滑动”或“点击”选择分数
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    SliderComponent slider
      font = Microsoft YaHei
      forceEndRoutine = False
      granularity = 0
      initVal = 1
      labels = ("1\n完全不消极","2","3","4", "5\n非常消极")
      letterHeight = 0.037
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        slider.marker.size = 0.05
  Routine intro_rating
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    ImageComponent int_rating
      image = material/intro_rating.jpg
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_methods
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    ImageComponent in_me
      image [set every repeat] = $image_methods
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ending
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    TextComponent end
      font = Microsoft YaHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = "all"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        rating = slider_2.getRating()  # 获取Slider的打分值

        # 假设你的Text组件名称为 'text_welcome_goodbye'
        if rating > 3:
            end.text = "预实验已结束。\n请练习主试进行正式实验。"
        else:
            end.text = "请练习主试重新学习三种不同方法的含义。"
  Routine fixation
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    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine instruction
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    TextComponent request
      color [set every repeat] = $i_color
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $instructions
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        request.bold = True
  Routine sentence
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    TextComponent text_5
      letterHeight = 0.04
      pos = (0.5, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text [set every frame] = $int(12-t) 
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    TextComponent persentation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text [set every repeat] = $sentence
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    KeyboardComponent key_resp_6
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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  Routine studyscore
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = 请选出对三种不同的反应方式的掌握程度：
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    SliderComponent slider_2
      font = Microsoft YaHei
      forceEndRoutine = False
      granularity = 0
      labels = ("1\n完全不理解", "2\n仍有困惑","3\n一般", "4\n基本理解","5\n完全理解")
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        slider_2.marker.size = 0.05
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine next_intro
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    TextComponent text_4
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        接下来，我们会进行一些练习
        屏幕中央会呈现一个指令
        之后会呈现一个句子
        请按照指令对句子进行反应

        按空格键继续
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine intro_rating
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = material/intro_loop_condition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'type': '这里会呈现一段文字。\n需要根据呈现的文字进行回忆或想象。\n呈现时间为30s。'},
      {'type': '这里会呈现一个指令。\n这些指令将指导你进行一些思考。\n每条指令的思考的时间为1分钟。'},
      {'type': '这里会呈现一些句子。\n你需要按照后面学习到的方法对这些句子进行反应。\n每条句子的反应时间为10s。'}]
    Routine pipeline
    Routine rating
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = material/image_methods_loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_methods': 'material/intro_react.jpg'},
      {'image_methods': 'material/intro_reappraisal.jpg'},
      {'image_methods': 'material/intro_observe.jpg'}]
    Routine intro_methods
  LoopTerminator trials_2
  Routine next_intro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = material/instruct_train_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructions': '观察', 'sentence': '如果人们知道我很焦虑，他们会认为我很脆弱。'},
      {'instructions': '反应', 'sentence': '如果人们知道我很焦虑，他们会认为我很脆弱。'},
      {'instructions': '重评', 'sentence': '如果人们知道我很焦虑，他们会认为我很脆弱。'},
      {'instructions': '反应', 'sentence': '我不是一个有价值的人。'},
      {'instructions': '重评', 'sentence': '我不是一个有价值的人。'},
      {'instructions': '观察', 'sentence': '我不是一个有价值的人。'}]
    Routine instruction
    Routine fixation
    Routine sentence
  LoopTerminator trials_3
  Routine studyscore
  Routine ending
